CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:podocyte_nuclei
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:podocyte_nuclei
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:7|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
    Select images to measure:podocyte_nuclei
    Select objects to measure:IdentifyPrimaryObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:podocyte_nuclei
    Select objects to measure:IdentifyPrimaryObjects

MeasureObjectIntensityDistribution:[module_num:9|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
    Select images to measure:podocyte_nuclei
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:IdentifyPrimaryObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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